---
API: 2.1
OpenSesame: 3.2.5
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "Inhibition: AX Continuous Performance Task"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "F:\\Documents\\Dropbox\\WHK Uni Landau\\Meta Standalone"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set bidi no
set background lightgrey

define inline_script adaptLevel
	set description "Executes Python code"
	set _run ""
	___prepare__
	if var.level == 'adapt' and var.block > 0:
		var.level = items['blockLoopAdaptation'].live_dm[var.block-1].level
	
	if str(var.level).isdigit():	
		var.duration_response = var.level_config[var.level]['duration_response_factor'] * var.mean_response_time
		var.trials_target = var.level_config[var.level]['trials_target']
		var.trials_nonTarget = var.level_config[var.level]['trials_nonTarget']
	__end__

define sketchpad blank
	set duration "[duration_blank]"
	set description "Displays stimuli"
	draw image center=1 file="story1.png" scale=1 show_if=always x=0 y=0 z_index=0
	draw rect color=white fill=1 h=608 penwidth=1 show_if=always w=768 x=-384 y=-304 z_index=0
	draw rect color=black fill=0 h=608 penwidth=1 show_if=always w=768 x=-384 y=-304 z_index=0

define loop blockLoopAdaptation
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 4
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice yes
	setcycle 0 level ""
	setcycle 0 trials_target 8
	setcycle 0 trials_nonTarget 2
	setcycle 0 duration_response 3500
	setcycle 1 practice no
	setcycle 1 level 0
	setcycle 1 trials_target ""
	setcycle 1 trials_nonTarget ""
	setcycle 1 duration_response ""
	setcycle 2 practice no
	setcycle 2 level adapt
	setcycle 2 trials_target ""
	setcycle 2 trials_nonTarget ""
	setcycle 2 duration_response ""
	setcycle 3 practice no
	setcycle 3 level adapt
	setcycle 3 trials_target ""
	setcycle 3 trials_nonTarget ""
	setcycle 3 duration_response ""
	run blockMetaSequence

define loop blockLoopNoAdaptation
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 4
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice yes
	setcycle 0 level ""
	setcycle 0 trials_target 8
	setcycle 0 trials_nonTarget 2
	setcycle 0 duration_response 3500
	setcycle 1 practice no
	setcycle 1 level 0
	setcycle 1 trials_target ""
	setcycle 1 trials_nonTarget ""
	setcycle 1 duration_response ""
	setcycle 2 practice no
	setcycle 2 level 0
	setcycle 2 trials_target ""
	setcycle 2 trials_nonTarget ""
	setcycle 2 duration_response ""
	setcycle 3 practice no
	setcycle 3 level 0
	setcycle 3 trials_target ""
	setcycle 3 trials_nonTarget ""
	setcycle 3 duration_response ""
	run blockMetaSequence

define sequence blockMetaSequence
	set flush_keyboard yes
	set description "Führt mehrere Items nacheinander aus"
	run setCurrentBlock always
	run blockSequence always
	run repeatPractice "[practice]=yes and [repeat]=yes"
	run instructionPracticeFinished "[practice]=yes and [block]=1"

define sequence blockSequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run clearResponses always
	run adaptLevel always
	run instructionButtons always
	run initializeTrialLoop always
	run trialLoopNoAdaptation "[adapt]=no"
	run trialLoopAdaptation "[adapt]=yes"
	run prepareFeedback always
	run feedbackBlockDynamic always
	run waitKeyboard always
	run calculateMeanResponseTime "[practice]=yes"

define inline_script calculateMeanResponseTime
	set description "Executes Python code"
	___run__
	for index, tt in enumerate(reversed(var.trial_types)):
		if tt in ('AX', 'AY','A','B','X','Y'):
			responses._responses[index].feedback = True
		elif tt in ('BX', 'BY'):
			responses._responses[index].feedback = False
		else:
			raise ValueError('trial_type unknown: %s' % tt)
	corr = responses._select(correct=1)
	if corr:
		var.mean_response_time = corr.avg_rt
	else:
		del var.mean_response_time
	__end__
	set _prepare ""

define inline_script clearResponses
	set description "Executes Python code"
	set _run "responses.clear()"
	set _prepare ""

define inline_script configuration
	set description "Executes Python code"
	set _run ""
	___prepare__
	var.adapt = True # set to False to disable adaption
	
	instruction_mouse = mouse(buttonlist=[3])
	
	var.duration_fixation = 1000
	var.duration_cue = 500
	var.duration_blank = 1200
	var.duration_feedback = 500
	var.duration_pairedTask = 20000
	
	var.level_config = [
		{'duration_response_factor': 2.0, 'trials_target': 15, 'trials_nonTarget': 5},
		{'duration_response_factor': 1.5, 'trials_target': 15, 'trials_nonTarget': 5},
		{'duration_response_factor': 1.5, 'trials_target': 18, 'trials_nonTarget': 4},
		{'duration_response_factor': 1.25, 'trials_target': 18, 'trials_nonTarget': 4},
		{'duration_response_factor': 1.25, 'trials_target': 21, 'trials_nonTarget': 3},
		{'duration_response_factor': 1.1, 'trials_target': 21, 'trials_nonTarget': 3},
		{'duration_response_factor': 1.1, 'trials_target': 24, 'trials_nonTarget': 2}
	]
	
	var.response_key1 = 'A'
	var.response_key2 = 'L'
	
	var.feedback = 'Schau mal, wie erfolgreich Du warst!'
	var.feedback_repeat = '''Lass es uns weiter versuchen, wir werden immer besser!'''
	
	# width, height
	var.feedback_grid = [10, 3]
	var.feedback_grid_uj = [6, 1]
	__end__

define sketchpad cue
	set duration "[duration_cue]"
	set description "Displays stimuli"
	draw image center=1 file="story1.png" scale=1 show_if=always x=0 y=0 z_index=0
	draw rect color=white fill=1 h=608 penwidth=1 show_if=always w=768 x=-384 y=-304 z_index=0
	draw rect color=black fill=0 h=608 penwidth=1 show_if=always w=768 x=-384 y=-304 z_index=0
	draw image center=1 file="A.png" scale=1 show_if="[cue]=A" x=0 y=0 z_index=0
	draw image center=1 file="B.png" scale=1 show_if="[cue]=B" x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run initializeParameters always
	run instructionsFromFile always
	run configuration always
	run instructionsRegular always
	run blockLoopNoAdaptation "[adapt]=no"
	run blockLoopAdaptation "[adapt]=yes"
	run instructionGoodbye always

define inline_script feedbackBlockDynamic
	set description "Executes Python code"
	___run__
	c = canvas()
	star = exp.pool[u'star.png']
	grey = exp.pool[u'star-grey.png']
	x0 = -((var.feedback_grid[0]-1) / 2.0)
	y0 = -(var.feedback_grid[1]-0.5)
	for y in range(var.feedback_grid[1]):
		for x in range(var.feedback_grid[0]):
			n = y*var.feedback_grid[0] + x # current star counter
			if n < int(var.total_correct):
				c.image(star, center=True, x=(x0+x)*50, y=(y0+y)*50, scale=0.2)
			elif n < int(var.total_responses):
				c.image(grey, center=True, x=(x0+x)*50, y=(y0+y)*50, scale=0.2)
			else:
				break # break out of both loops
		else:
			continue # inside loop finished regularly -> keep going
		break # only breaks if inside loop broke
	
	add_y = 50
	
	w,h = c.text_size(var.feedback_text, max_width=c.width*0.8)
	c.text(var.feedback_text, max_width=c.width*0.8, center=True, x=0, y=h/2+add_y)
	
	c.show()
	__end__
	set _prepare ""

define feedback feedbackTrial
	set reset_variables no
	set duration "[duration_feedback]"
	set description "Displays stimuli"
	draw image center=1 file="story1.png" scale=1 show_if=always x=0 y=0 z_index=0
	draw rect color=white fill=1 h=608 penwidth=1 show_if=always w=768 x=-384 y=-304 z_index=0
	draw rect color=black fill=0 h=608 penwidth=1 show_if=always w=768 x=-384 y=-304 z_index=0
	draw image center=1 file="correct.png" scale=0.6 show_if="[correct]=1" x=0 y=0 z_index=0
	draw image center=1 file="incorrect.png" scale=0.6 show_if="[correct]=0" x=0 y=0 z_index=0

define sketchpad fixation
	set duration "[duration_fixation]"
	set description "Displays stimuli"
	draw image center=1 file="story1.png" scale=1 show_if=always x=0 y=0 z_index=0
	draw rect color=white fill=1 h=608 penwidth=1 show_if=always w=768 x=-384 y=-304 z_index=0
	draw rect color=black fill=0 h=608 penwidth=1 show_if=always w=768 x=-384 y=-304 z_index=0
	draw fixdot color=black show_if=always style="large-cross" x=0 y=0 z_index=0

define inline_script initializeParameters
	set description "Executes Python code"
	set _run ""
	___prepare__
	if 'mean_response_time' not in var:
		var.mean_response_time = 1750 # only needed for testing. Should be set by run.py or by practice mode
	__end__

define inline_script initializeTrialLoop
	set description "Executes Python code"
	___run__
	# add to live_dm, because it was already prepared
	items['trialLoopAdaptation'].var.continuous = u'yes'
	items['trialLoopAdaptation'].live_dm = items['trialLoopAdaptation']._create_live_datamatrix()
	items['trialLoopAdaptation'].live_row = 0
	items['trialLoopNoAdaptation'].var.continuous = u'yes'
	items['trialLoopNoAdaptation'].live_dm = items['trialLoopNoAdaptation']._create_live_datamatrix()
	items['trialLoopNoAdaptation'].live_row = 0
	
	if var.adapt == 'no':
		var.trial_types = items['trialLoopNoAdaptation'].live_dm.trial_type
	else:
		var.trial_types = items['trialLoopAdaptation'].live_dm.trial_type
	__end__
	___prepare__
	items['trialLoopAdaptation'].dm.weight = var.trials_nonTarget
	items['trialLoopAdaptation'].dm.weight[0] = var.trials_target
	items['trialLoopNoAdaptation'].dm.weight = var.trials_nonTarget
	items['trialLoopNoAdaptation'].dm.weight[0] = var.trials_target
	__end__

define sketchpad instruction
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="Leo.png" scale=0.3 show_if=always x=96 y=-96 z_index=0
	draw image center=1 file="Lessa.png" scale=0.3 show_if=always x=-96 y=-96 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="[instruction_text]" x=0 y=64 z_index=0

define inline_script instructionButtons
	set description "Executes Python code"
	___run__
	if var.adapt == 'yes':
		var.instruction_text = instruction('buttons')
	elif var.adapt == 'no':
		var.instruction_text = instruction('buttons_control')
	items['instruction'].prepare()
	items['instruction'].run()
	instruction_mouse.flush()
	instruction_mouse.get_click()
	__end__
	set _prepare ""

define inline_script instructionGoodbye
	set description "Executes Python code"
	___run__
	var.instruction_text = 'Geschafft! Vielen Dank!'
	items['instruction'].prepare()
	items['instruction'].run()
	instruction_mouse.flush()
	instruction_mouse.get_click()
	__end__
	set _prepare ""

define inline_script instructionPracticeFinished
	set description "Executes Python code"
	___run__
	var.instruction_text = 'Super Übung! Lass uns jetzt das eigentliche Spiel versuchen!'
	items['instruction'].prepare()
	items['instruction'].run()
	instruction_mouse.flush()
	instruction_mouse.get_click()
	__end__
	set _prepare ""

define sketchpad instructionStory1
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="story1.png" scale=0.53 show_if=always x=0 y=144 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="[=instruction('story1')]" x=0 y=-256 z_index=0

define sketchpad instructionStory2
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="story2.png" scale=0.53 show_if=always x=0 y=144 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if="[adapt]=no" text="[=instruction('story2_control')]" x=0 y=-224 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if="[adapt]=yes" text="[=instruction('story2')]" x=0 y=-224 z_index=0

define sketchpad instructionTask
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if="[adapt]=no" text="[=instruction('task_control')]" x=0 y=-224 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if="[adapt]=yes" text="[=instruction('task')]" x=0 y=-224 z_index=0
	draw image center=1 file="story1.png" scale=0.53 show_if=always x=0 y=144 z_index=0
	draw rect color="#ffffff" fill=1 h=320 penwidth=1 show_if=always w=448 x=-224 y=-16 z_index=0
	draw rect color=black fill=0 h=320 penwidth=1 show_if=always w=448 x=-224 y=-16 z_index=0
	draw fixdot color="#000000" show_if=always style="large-cross" x=0 y=144 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="Lass es uns üben!" x=0 y=-96 z_index=0

define sketchpad instructionTitle
	set duration 0
	set description "Präsentiert Stimuli"
	draw textline center=1 color=black font_bold=yes font_family=mono font_italic=no font_size=36 html=yes show_if=always text="[=instruction('title')]" x=0 y=0 z_index=0

define inline_script instructionWelcome
	set description "Executes Python code"
	___run__
	var.instruction_text = '''Hallo, wir sind Lessa und Leo! '''
	items['instruction'].prepare()
	items['instruction'].run()
	instruction_mouse.flush()
	instruction_mouse.get_click()
	__end__
	set _prepare ""

define inline_script instructionsFromFile
	set description "Executes Python code"
	set _run ""
	___prepare__
	def instruction(name):
		with open(exp.pool[name + '.txt'], 'r') as f:
			return f.read()
	__end__

define sequence instructionsRegular
	set flush_keyboard yes
	set description "Führt mehrere Items nacheinander aus"
	run instructionTitle always
	run waitKeyboard always
	run instructionWelcome always
	run instructionStory1 always
	run waitKeyboard always
	run instructionStory2 always
	run waitKeyboard always
	run instructionTask always
	run waitKeyboard always

define keyboard_response kb_response
	set timeout "[duration_response]"
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response "[correctresponse]"
	set allowed_responses "[response_key1];[response_key2]"

define logger logTrial
	set description "Logs experimental data"
	set auto_log no
	log correct
	log response_time
	log practice
	log level
	log response
	log trial_type
	log correctresponse
	log cue
	log probe
	log variant
	log variant_response_time
	log variant_response
	log trial
	log block
	log subject_nr

define inline_script prepareFeedback
	set description "Executes Python code"
	___run__
	for index, tt in enumerate(reversed(var.trial_types)):
		if tt in ('AX'):
			responses._responses[index].feedback = False
		elif tt in ('AY', 'BX', 'BY','A','B','X','Y'):
			responses._responses[index].feedback = True
		else:
			raise ValueError('trial_type unknown: %s' % tt)
	
	var.repeat = False
	if var.practice=='yes':
		if responses.acc >= 60.0:
			var.feedback_text = var.feedback
		else:
			var.feedback_text = var.feedback_repeat
			var.repeat = True
	else:
		var.feedback_text = var.feedback
		
		# update level for feedback
		if str(var.level).isdigit():
			if responses.acc > 80.0 and var.level < len(var.level_config)-1:
				var.level = int(var.level) + 1
			elif responses.acc < 60.0 and var.level > 0:
				var.level = int(var.level) - 1
			else:
				pass
	
	# update live matrix to be able to pull correct level next time
	if var.adapt == 'yes':
		items['blockLoopAdaptation'].live_dm[var.block].level = var.level
	__end__
	set _prepare ""

define sketchpad probe
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="story1.png" scale=1 show_if=always x=0 y=0 z_index=0
	draw rect color=white fill=1 h=608 penwidth=1 show_if=always w=768 x=-384 y=-304 z_index=0
	draw rect color=black fill=0 h=608 penwidth=1 show_if=always w=768 x=-384 y=-304 z_index=0
	draw image center=1 file="X.png" scale=1 show_if="[probe]=X" x=0 y=0 z_index=0
	draw image center=1 file="Y.png" scale=1 show_if="[probe]=Y" x=0 y=0 z_index=0
	draw image center=1 file="A.png" scale=1 show_if="[probe]=A" x=0 y=0 z_index=0
	draw image center=1 file="B.png" scale=1 show_if="[probe]=B" x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=90 html=yes show_if=always text="?" x=0 y=-256 z_index=0

define inline_script repeatPractice
	set description "Executes Python code"
	___run__
	items['blockSequence'].prepare()
	items['blockSequence'].run()
	__end__
	set _prepare ""

define inline_script setCurrentBlock
	set description "Executes Python code"
	set _run ""
	___prepare__
	var.block = var.live_row
	__end__

define inline_script setCurrentTrial
	set description "Executes Python code"
	set _run ""
	set _prepare "var.trial = var.live_row"

define loop trialLoopAdaptation
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 4
	set continuous yes
	set break_if_on_first yes
	set break_if never
	setcycle 0 weight 0
	setcycle 0 trial_type AX
	setcycle 0 cue A
	setcycle 0 probe X
	setcycle 0 correctresponse "[response_key1]"
	setcycle 1 weight 0
	setcycle 1 trial_type BX
	setcycle 1 cue B
	setcycle 1 probe X
	setcycle 1 correctresponse "[response_key2]"
	setcycle 2 weight 0
	setcycle 2 trial_type AY
	setcycle 2 cue A
	setcycle 2 probe Y
	setcycle 2 correctresponse "[response_key2]"
	setcycle 3 weight 0
	setcycle 3 trial_type BY
	setcycle 3 cue B
	setcycle 3 probe Y
	setcycle 3 correctresponse "[response_key2]"
	weight weight
	shuffle
	run trialSequence

define loop trialLoopNoAdaptation
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 4
	set continuous yes
	set break_if_on_first yes
	set break_if never
	setcycle 0 weight 0
	setcycle 0 trial_type X
	setcycle 0 cue ""
	setcycle 0 probe X
	setcycle 0 correctresponse "[response_key1]"
	setcycle 1 weight 0
	setcycle 1 trial_type Y
	setcycle 1 cue ""
	setcycle 1 probe Y
	setcycle 1 correctresponse "[response_key2]"
	setcycle 2 weight 0
	setcycle 2 trial_type A
	setcycle 2 cue ""
	setcycle 2 probe A
	setcycle 2 correctresponse "[response_key2]"
	setcycle 3 weight 0
	setcycle 3 trial_type B
	setcycle 3 cue ""
	setcycle 3 probe B
	setcycle 3 correctresponse "[response_key2]"
	weight weight
	shuffle
	run trialSequence

define sequence trialSequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run setCurrentTrial always
	run fixation always
	run cue "[adapt]=yes"
	run blank always
	run probe always
	run kb_response always
	run feedbackTrial always
	run logTrial always

define inline_script waitKeyboard
	set description "Executes Python code"
	___run__
	instruction_mouse.flush()
	instruction_mouse.get_click()
	__end__
	set _prepare ""

